PsychoPy2experiment version="2023.2.3"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=C187I4LR
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = True
  Incomplete URL = https://app.prolific.com/submissions/complete?cc=CHVQGN2A
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  backgroundFit = fill
  color = 1.0000, 1.0000, 1.0000
  expName = circleBounceNew
  keyboardBackend = Pyglet
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Routines
  Routine Instructions
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        l5.autoDraw = True

        print('hello world')
    TextComponent text_5
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        Welcome to this experiment!

        You can control the red dot by moving the mouse.

        Moving towards the top right corner of the screen will rotate the dot clockwise .

        Moving towards the bottom left corner of the screen will move it anti-clockwise.

        Try completing one clockwise rotation and one anticlockwise rotation.
    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Instruction_Animation
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    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        radius = 0.4
      Begin JS Routine:
        l5.autoDraw = true;
        averageCircle = new visual.Polygon({"win": psychoJS.window, "radius": dotRadius, "edges": 99, "fillColor": black, "lineColor": black});
        averageCircle.autoDraw = true;
        rotationSpeed = 0.1;
        angle = (Math.PI / 3);
      Begin Routine:
        l5.autoDraw = True
        averageCircle = visual.Polygon(win, radius = dotRadius, edges = 99, fillColor=black, lineColor=black)
        averageCircle.autoDraw = True
        rotationSpeed = 0.1
        angle = pi/3
      Each Frame:
        avgX = radius * cos(angle)
        avgY = radius * sin(angle) - 0.28
        angle += rotationSpeed/5

        averageCircle.pos = (avgX, avgY)
      Each JS Frame:
        avgX = (radius * Math.cos(angle));
        avgY = ((radius * Math.sin(angle)) - 0.28);
        angle += (rotationSpeed / 5);
        averageCircle.pos = [avgX, avgY];
      End JS Routine:
        l5.autoDraw = false;
    MouseComponent mouse_11
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Instructions2
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    CodeComponent code_11
      Code Type = Both
      Begin Experiment:
        white=[1,1,1]
        grey=[.2,.2,.2]
        yellow=[1,1,0]
        green=[-1,0,-1]
        black=[-1,-1,-1]
        red=[1,0,0]
        transparent = None
      Begin JS Experiment:
        white = new util.Color([1, 1, 1]);
        grey = new util.Color([.2, .2, .2]);
        yellow = new util.Color([1, 1, 0]);
        green = new util.Color([-1, 0, -1]);
        black = new util.Color([-1, -1, -1]);
        red = new util.Color([1, 0, 0]);
        transparent = null

        win=psychoJS.window

        console.log('Welcome to the experiment');
      Begin JS Routine:
        l5.autoDraw = true;
        Practice = true;
        Condition = 0;


        console.log('Welcome to the experiment');
      Begin Routine:
        l5.autoDraw = True
        Practice = True
        Condition = 0
      End JS Routine:
        l5.autoDraw = false
    TextComponent text_7
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Please read these instructions carefully,
        as otherwise it is easy to get confused!

        In the following practice trials there will be
        more than one dot to see.
        You only need to focus on the first one.

        All questions refer to the dot that was
        the first to cross the circle lines,
        in other words the first dot to leave the circle.

        Sometimes it's a very close call which dot is the first,
        in that case pick any dot to follow.

        Click to continue!
    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Line0
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    CodeComponent code_14
      Code Type = Both
      Begin JS Routine:
        mouse_angle = ((0 + ((2.5 * Math.PI) / 15)) + Math.PI);

        start = [((0.7 * radius) * Math.cos((0 + ((2.5 * Math.PI) / 15)))), ((0.7 * radius) * Math.sin((0 + ((2.5 * Math.PI) / 15))))];
        end = [((0.7 * radius) * Math.cos(((0 + ((2.5 * Math.PI) / 15)) + Math.PI))), ((0.7 * radius) * Math.sin(((0 + ((2.5 * Math.PI) / 15)) + Math.PI)))];
        Line.pos = start;
        l5.autoDraw = true;
        Line.autoDraw = true;
        circle0 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle0.opacity = 1;
        //circle0.autoDraw = true;

        console.log('start=', start)
      Begin Routine:
        mouse_angle = 0+2.5*pi/15 + pi
        #circle0 = visual.Circle(win, radius=0.015/2, fillColor='red', lineColor='red')
        circle0.opacity = 1  # make the circle invisible

        start = [0.7*radius * cos(0+2.5*pi/15), 0.7*radius * sin(0+2.5*pi/15)]
        end = (0.7*radius * cos(0+2.5*pi/15+pi), 0.7*radius * sin(0+2.5*pi/15+pi))
        Line.pos = start
        Line.autoDraw = True
        circle0.autoDraw = True
      Each Frame:
        change = -sum(mouse.getRel())

        mouse_angle += 3*change
        xposition = 0.28 * cos(mouse_angle)
        yposition = 0.28 * sin(mouse_angle)

        circle0.pos = (xposition, yposition)
        circle0.pos += start  # update the position of the circle
      Each JS Frame:
        //change = (- util.sum(mouse_15.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2((position[1]-start[1]), (position[0]-start[0]))
        xposition = ((0.7*radius) * Math.cos(mouse_angle)) + start[0];
        yposition = ((0.7*radius) * Math.sin(mouse_angle)) + start[1];
        circle0.pos = [xposition, yposition];
        circle0.draw()
      End JS Routine:
        l5.autoDraw = false;
        Line.autoDraw = false;
        circle0.autoDraw = false;

        psychoJS.experiment.addData('Demo c0 x position:', circle0.pos[0]);
        psychoJS.experiment.addData('Demo c0 y position:', circle0.pos[1])
      End Routine:
        Line.autoDraw = False
    MouseComponent mouse_15
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.02
      pos = (0, 0.8*radius)
      startVal [time (s)] = 0.0
      text = Where did the dot cross the black line?
      units = height
      wrapWidth = 0.5
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  Routine Halo_01
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    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        mouse_angle = ((0 + ((2.5 * Math.PI) / 15)) + Math.PI);
        //mouse = new psychoJS.eventManager.Mouse({"win": psychoJS.window});

        circle1 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle1.opacity = 1;
        l5.autoDraw = true;
        circle0.autoDraw = true;
        //circle1.autoDraw = true;
      Begin Routine:
        mouse_angle = 0+2.5*pi/15 +pi

        mouse = event.Mouse(win=win)

        #for i in range(circleCount):
        #circles[i].opacity= 1

        # create a circle (initially not displayed)
        circle1 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle1.opacity = 1  # make the circle invisible

        circle1.autoDraw = True
      Each Frame:
        change = -sum(mouse.getRel())
        mouse_angle += 3*change

        xposition = 0.28 * cos(mouse_angle)
        yposition = 0.28 * sin(mouse_angle)

        circle1.pos = (xposition, yposition) # update the position of the circle
      Each JS Frame:
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((0.7*radius) * Math.cos(mouse_angle));
        yposition = ((0.7*radius) * Math.sin(mouse_angle));
        circle1.pos = [xposition, yposition];
        circle1.draw()
      End JS Routine:
        l5.autoDraw = false;
        circle0.autoDraw = false;
        circle1.autoDraw = false;

        psychoJS.experiment.addData('Demo c1 x position:', circle1.pos[0]);
        psychoJS.experiment.addData('Demo c1 y position:', circle1.pos[1])
    MouseComponent mouse_16
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.02
      pos = (0, 0.2*radius)
      startVal [time (s)] = 0.0
      text = Where did the dot leave the circle
      wrapWidth = 0.5
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  Routine Halo_02
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    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        mouse_angle = ((0 + ((2.5 * Math.PI) / 15)) + (0.9 * Math.PI));
        circle2 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle2.opacity = 1;
        l3.autoDraw = true;
        l5.autoDraw = true;
        circle0.autoDraw = true;
        circle1.autoDraw = true;
        //circle2.autoDraw = true;
      Begin Routine:
        #l3.autoDraw = True
        mouse_angle = 0+2.5*pi/15 + 0.9*pi
        # create a circle (initially not displayed)
        circle2 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle2.opacity = 1  # make the circle invisible

        circle2.autoDraw = True
      Each Frame:
        l3.draw()
        l5.draw()
        #l4.draw()
        #N.draw()
        change = -sum(mouse.getRel())
        mouse_angle += 3*change
        xposition = 0.9775*radius * cos(mouse_angle)
        yposition = 0.9775*radius * sin(mouse_angle)

        circle2.pos = (xposition, yposition)
      Each JS Frame:
        //l3.draw();
        //l5.draw();
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((0.9775 * radius) * Math.cos(mouse_angle));
        yposition = ((0.9775 * radius) * Math.sin(mouse_angle));
        circle2.pos = [xposition, yposition];
        circle2.draw()
      End JS Routine:
        l3.autoDraw = false;
        l5.autoDraw = false;
        circle0.autoDraw = false;
        circle1.autoDraw = false;
        circle2.autoDraw = false;
        psychoJS.experiment.addData('Demo c2 x position:', circle2.pos[0]);
        psychoJS.experiment.addData('Demo c2 y position:', circle2.pos[1])
    MouseComponent mouse_17
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      letterHeight = 0.02
      pos = (0, 0.3*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Assuming that the dot continues
        its trajectory after leaving the circle,
        where would the dot have
        crossed the line of this ring?
  Routine Halo_03
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    CodeComponent code_17
      Code Type = Both
      Begin JS Routine:
        mouse_angle = ((0 + ((2.5 * Math.PI) / 15)) + Math.PI);
        circle3 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle3.opacity = 1;
        l1.autoDraw = true;
        l3.autoDraw = true;
        l5.autoDraw = true;
        circle0.autoDraw = true;
        circle1.autoDraw = true;
        circle2.autoDraw = true;
        //circle3.autoDraw = true;
      Begin Routine:
        #l1.autoDraw = True
        mouse_angle = 0+2.5*pi/15 + pi
        # create a circle (initially not displayed)
        circle3 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle3.opacity = 1  # make the circle invisible
        circle3.autoDraw = True
      Each Frame:
        l1.draw()
        l3.draw()
        l5.draw()

        change = -sum(mouse.getRel())
        mouse_angle += 3*change
        xposition = 1.25*radius * cos(mouse_angle)
        yposition = 1.25*radius * sin(mouse_angle)

        circle3.pos = (xposition, yposition)
      Each JS Frame:
        //l1.draw();
        //l3.draw();
        //l5.draw();
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((1.25 * radius) * Math.cos(mouse_angle));
        yposition = ((1.25 * radius) * Math.sin(mouse_angle));
        circle3.pos = [xposition, yposition];
        circle3.draw()
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        l1.autoDraw = false;
        l3.autoDraw = false;
        l5.autoDraw = false;
        l5.lineColor = "white";
        Line.autoDraw = false;
        circle1.autoDraw = false;
        circle0.autoDraw = false;
        circle2.autoDraw = false;
        circle3.autoDraw = false;
        averageCircle.autDraw = false
        psychoJS.experiment.addData('Demo c3 x position:', circle3.pos[0]);
        psychoJS.experiment.addData('Demo c3 y position:', circle3.pos[1])
      End Routine:
        l1.autoDraw = False
        l3.autoDraw = False
        l5.autoDraw = False

        l5.lineColor = 'white'
        Line.autoDraw = False
        circle1.autoDraw = False
        circle0.autoDraw = False
        circle2.autoDraw = False
        circle3.autoDraw = False

        averageCircle.autDraw = False
    MouseComponent mouse_18
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_15
      color = black
      letterHeight = 0.02
      pos = (0, 0.3*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Assuming that the dot continues
        its trajectory after leaving the circle,
        where would the dot have
        crossed the line of the second ring?
    TextComponent text_19
      color = black
      letterHeight = 0.02
      pos = (0, -0.1*radius)
      startVal [time (s)] = 0.0
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      text:
        During the experiment, clicking on this screen
        will immediatly cause moving dots to appear!
  Routine Start
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        Practice = False
        l5.autoDraw = True
    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Those were the practice trials.

        Remember that 'first dot' refers to
        the first dot to leave the circle.

        Click to start the experiment!
  Routine Rotation
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import math
        radius = 0.4
        #win = visual.Window(size=(800, 600), color=black)
        win.setColor(black)




        Progress = 0
        bar = visual.Progress(win, pos = (0.5, 0.45), size = (0.2, 0.1))
        bar.opacity = 0

        bar.autoDraw = True
        Condition = 0
      Begin JS Experiment:
        //var dx;
        //var dy;
        //var _pj;
        //var blueDotAngle;
        //var t1;
        //var t2;
        //var t_now;
        //var frameCount;
        //var frameCountPrevious;

        Math.floor();
        //radius = 0.375;
        psychoJS.window.setColor(black);
        Progress = 0;
        //bar = new visual.Progress({"win": psychoJS.window, "pos": [0.5, 0.45], "size": [0.2, 0.1]});
        bar = new visual.Progress({"win": psychoJS.window, "pos": [0, 0], "size": [0.2, 0.1], "backColor": green});
        bar.opacity = 0;
        //bar.autoDraw = true;
        Condition = 0;
        barground = new visual.Rect({"win": psychoJS.window, "pos": [0.65, 0.45], "size": [0.2, 0.1], "lineColor": white, "fillColor": null, "lineWidth": 5});
        barfor = new visual.Rect({"win": psychoJS.window, "pos": [0.61, 0.45], "size": [0.16, 0.08], "fillColor": white});
        barfor.opacity = 0;
        barground.opacity = 0;
        barground.autoDraw = true;
        barfor.autoDraw = true;
      Begin JS Routine:
        var dx;
        var dy;
        var _pj;
        var blueDotAngle;
        var t1;
        var t2;
        var t_now;
        var frameCount;
        var frameCountPrevious;
        var t_previous;


        //rotationSpeed = (0.1 / nr);
        //if (nr === 1) {rotationSpeed = 0.02};//{rotationSpeed = 0.026};
        //if (nr === 2) {rotationSpeed = 0.04};//{rotationSpeed = 0.04};
        rotationSpeed = 0.028
        //console.log('R', nr);
        oscillationSpeed = (rotationSpeed * 2);
        minDist = (17.5 / 250);
        blueDotPositions = [];
        angle = s;
        //circleCount = c;
        circleCount = c;

        bluecirclePosition = (- 0.6);
        circles = [];
        averageCircle.opacity = 0;
        started = false;
        ended = false;
        l5.autoDraw = true;
        bar.autoDraw = true;
        for (var i, _pj_c = 0, _pj_a = util.range(circleCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            circles.push(new visual.Polygon({"win": psychoJS.window, "radius": dotRadius, "edges": v, "fillColor": black, "lineColor": black}));
            circles[i].autoDraw = true;
        }
        // this is just to test saving the position of the red circle

        frameCount = 0;
        d = (180 / Math.PI);
        //barground.opacity = 1;
        //barfor.opacity = 1;
        if ((Practice !== true)) {
            Progress += 1;}
            barground.opacity = 1;
            barfor.opacity = 1;
        xpro = barfor.pos[0];
        ypro = barfor.pos[1];
        barfor.pos = [xpro+(Progress*0.0016 / 52), ypro];
        barfor.size = [(Progress*0.16 / 52), 0.08];
        //}
        Condition = 2;
        console.log('l:', l, 's:', s, 'q:', q, 'cR:', c)
      Begin Routine:
        rotationSpeed = 0.1/nr
        oscillationSpeed = rotationSpeed * 2  # 2 oscillations per revolution
        minDist = 17.5/250  # Minimum distance from the center
        blueDotPositions = []
        angle = s
        circleCount = c
        bluecirclePosition = -0.6
        circles = []

        #lR.autoDraw = True
        l5.autoDraw = True

        #averageCircle = visual.Polygon(win, radius = dotRadius, edges = 99, fillColor=blue, lineColor=black)
        #averageCircle.autoDraw = True
        for i in range(circleCount):
            if v == 99:
                circles.append(visual.Polygon(win, radius = dotRadius, edges = v, fillColor=black, lineColor=black))
            else:
                circles.append(visual.GratingStim(win, tex=None, mask='circle', size=(2*dotRadius,3*dotRadius), color=black, texRes = 1024))
            circles[i].autoDraw = True


        frameCount = 0
        d = 180/pi
        if not Practice == True:
            Progress += 1
            #barground.opacity = 1
            #barfor.opacity = 1
            bar.progress = Progress / 48

        Condition = 2
      Each Frame:
        rotation = frameCount * rotationSpeed
        oscillation = 0.5 * (1 - cos(frameCount * oscillationSpeed))  # Oscillation factor

        avgX = radius/2 * cos(angle)
        avgY = radius/2 * sin(angle)
        angle += rotationSpeed

        # Calculate the number of rotations
        num_rotations = (angle-s) / (2 * pi)


        # Calculate the vector from the average position to the closest point on the yellow circle
        vecX = avgX - minDist * cos(np.arctan2(avgY, avgX))
        vecY = avgY - minDist * sin(np.arctan2(avgY, avgX))

        oscX = avgX + (vecX - avgX) * oscillation
        oscY = avgY + (vecY - avgY) * oscillation

        averageCircle.pos = (avgX, avgY)
        # Store the position of the blue dot
        blueDotPos = [oscX, oscY]
        blueDotPositions.append(blueDotPos)

        # Calculate the distance between the blue dot and the center of the big circle
        dist = np.sqrt((oscX - 0)**2 + (oscY - 0)**2)

        if l > 1:
            avgX = radius * cos(s-pi/2) + bluecirclePosition * cos(s-pi/2)
            avgY = radius * sin(s-pi/2) + bluecirclePosition * sin(s-pi/2)
            bluecirclePosition += rotationSpeed/5
            avgY += minDist
            oscX = avgX
            oscY = avgY
            dist = np.sqrt((oscX - 0.14)**2 + (oscY - 0)**2)

        # Draw 6 dots around the center of the yellow circle
        for i in range(circleCount):
            tangle = np.interp(i, [0, circleCount], [s, pi/q+s])
            if num_rotations >= 0.5:
                circles[i].autoDraw = False
                #l5.lineColor = 'grey'
                l5.lineWidth = 150
                #win.flip()

                continueRoutine = False
            else:
                #tangle = np.interp(i, [0, circleCount], [0, np.pi/3])  # Use TWO_PI for a full circle
                dotPos = np.array([cos(tangle - rotation), sin(tangle - rotation)]) * dist  # Add rotation to the angle
                # Adjust the position of the yellow dots to follow the same path as the yellow circle
                dotPos[0] += oscX
                dotPos[1] += oscY
                circles[i].pos = dotPos
                # Calculate the angle between the blue dot and each polygon
                dx = blueDotPos[0] - dotPos[0]
                dy = blueDotPos[1] - dotPos[1]
                blueDotAngle = np.arctan2(dy, dx) - pi / 2
                # Set the orientation of each polygon to this angle
                circles[i].ori = blueDotAngle * d * r
                circles[i].draw()

        if 'escape' in event.getKeys():
                    continueRoutine = False

        frameCount += 1
      Each JS Frame:
        var dx;
        var dy;
        //var _pj;
        var blueDotAngle;
        //var t1;
        var t2;
        var RfinaldotPos;
        //var t_now;
        //var frameCount;
        //var frameCountPrevious;

        if (started === false) {
                    console.log('t1 =',RotationClock.getTime());
                    t1 = RotationClock.getTime();
                    t_previous = t1;
                    frameCountPrevious=0;
                    started = true};
        //function _pj_snippets(container) {
            //function in_es6(left, right) {
                //if (((right instanceof Array) || ((typeof right) === "string"))) {
                    //return (right.indexOf(left) > (- 1));
                //} else {
                    //if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        //return right.has(left);
                    //} else {
                        //return (left in right);
                    //}
                //}
            //}
            //container["in_es6"] = in_es6;
            //return container;
        //}
        //_pj = {};
        //_pj_snippets(_pj);

        t_now = RotationClock.getTime();
        //console.log('t_now =',t_now);
        //console.log('t1 =',t1);

        frameCount = Math.round((t_now-t1)*60);

        frameDifferenceFrac = (t_now-t_previous)*60;
        frameDelta = frameCount-frameCountPrevious;
        //console.log('frameDelta =',frameDelta);
        //console.log('frameDifferenceFrac =',frameDifferenceFrac);

        rotation = (frameCount * rotationSpeed);
        oscillation = (0.5 * (1 - Math.cos((frameCount * oscillationSpeed))));
        avgX = ((radius / 2) * Math.cos(angle));
        avgY = ((radius / 2) * Math.sin(angle));
        angle += rotationSpeed;
        num_rotations = ((angle - s) / (2 * Math.PI));
        vecX = (avgX - (minDist * Math.cos(Math.atan2(avgY, avgX))));
        vecY = (avgY - (minDist * Math.sin(Math.atan2(avgY, avgX))));
        oscX = (avgX + ((vecX - avgX) * oscillation));
        oscY = (avgY + ((vecY - avgY) * oscillation));
        averageCircle.pos = [avgX, avgY];
        blueDotPos = [oscX, oscY];
        blueDotPositions.push(blueDotPos);
        dist = Math.sqrt((Math.pow((oscX - 0), 2) + Math.pow((oscY - 0), 2)));
        if ((l > 0)) {
            avgX = ((radius * Math.cos((s - (Math.PI / 2)))) + (bluecirclePosition * Math.cos((s - (Math.PI / 2)))));
            avgY = ((radius * Math.sin((s - (Math.PI / 2)))) + (bluecirclePosition * Math.sin((s - (Math.PI / 2)))));
            bluecirclePosition += (rotationSpeed / 5);
            avgY += minDist;
            oscX = avgX;
            oscY = avgY;
            dist = Math.sqrt((Math.pow((oscX - 0.14), 2) + Math.pow((oscY - 0), 2)));
        }

        function map(value, inMin, inMax, outMin, outMax) {
            return (value - inMin) * (outMax - outMin) / (inMax - inMin) + outMin;
        }

        for (var i, _pj_c = 0, _pj_a = util.range(circleCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            var tangle = map(i, 0, circleCount, s, Math.PI / q + s);
            if ((num_rotations >= 0.5)) {
                if (ended === false) {
                    t2 = RotationClock.getTime();
                    console.log('R time taken:', t2, t1)
                    ended = true};
                circles[i].autoDraw = false;
                RfinaldotPos = circles[0].pos;
                psychoJS.experiment.addData('Rotation first dot x position', RfinaldotPos[0]);
                psychoJS.experiment.addData('Rotation first dot y position:', RfinaldotPos[1])
                continueRoutine = false;
            } else {
                var dotPos = [Math.cos(tangle - rotation) * dist, Math.sin(tangle - rotation) * dist];
                dotPos[0] += oscX;
                dotPos[1] += oscY;
                circles[i].pos = dotPos;
                dx = (blueDotPos[0] - dotPos[0]);
                dy = (blueDotPos[1] - dotPos[1]);
                blueDotAngle = (Math.atan2(dy, dx) - (Math.PI / 2));
                //circles[i].ori = ((blueDotAngle * d) * r);
                circles[i].draw();
            }
        }
        //if (_pj.in_es6("escape", psychoJS.eventManager.getKeys())) {
            //continueRoutine = false;
        //}
        //frameCount += 1;
        t_previous = t_now;
        frameCountPrevious = frameCount;
      End JS Routine:
        l5.autoDraw = false;
        bar.autoDraw = false;

        for (var i, _pj_c = 0, _pj_a = util.range(circleCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            circles[i].autoDraw = false;
        }

        var angles = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((((((i / circleCount) * 0.5) * Math.PI) / q) + s) - Math.PI));
            }
            return _pj_a;
        })();
      End Routine:
        for i in range(circleCount):
            circles[i].autoDraw = False
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Mask
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    CodeComponent code_3
      Code Type = Both
      Before Experiment:
        radius = 0.4
      Begin Experiment:
        radius = 0.4
        #win.setColor(black')


        l1 = visual.Polygon(win, radius = 1.25*radius, edges = 99, lineWidth = 60, lineColor=white, fillColor=black)
        lR = visual.Polygon(win, radius = radius, edges = 99, lineColor=grey, fillColor=grey)
        #l2 = visual.Circle(win, 1.2*radius, lineColor='black', fillColor='black')
        l3 = visual.Polygon(win, radius = 0.9775*radius, edges = 99, lineWidth = 60, lineColor=white, fillColor=black)
        #l4 = visual.Circle(win, 0.9*radius, lineColor='black', fillColor='black')
        l5 = visual.Polygon(win, radius = 0.7*radius, edges = 99, lineColor=black, fillColor=white)
        Line = visual.Polygon(win, radius = 0.7*radius, edges = 99, lineWidth = 60, lineColor = black, fillColor=black)
        Line.setFillColor(None)
        #text = visual.TextStim(win, text='Hello World', pos=(-0.5, 0.0))
        #times = visual.TextStim(win, text='Hello World', pos=(0.0, 0.25))
        dotRadius = 0.015/2
        circle_1 = visual.Polygon(win, radius=0.015/2, edges = 99, lineColor=red, fillColor=red)
        circle0 = visual.Polygon(win, radius=0.015/2, edges = 99, lineColor=red, fillColor=red)
      Begin JS Experiment:
        //var initializationClock = new util.Clock();
        defineVars = true;
        console.log('defineVars at begin experiment:', defineVars)
        //circlePositions = [-0.03333333333333333, -0.06666666666666667,-0.1,-0.13333333333333333,-0.16666666666666666,-0.2];
        circlePositions = []
        //radius = 0.4;
        dotRadius = (0.015 / 2);
        l1 = new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "lineWidth": 15/2, "lineColor": white, "fillColor": black, "edges": 99, "radius": (1.25*radius)});
        //"radius": (1.25 * radius)
        lR = new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "radius": radius, "edges": 99, "lineColor": black, "fillColor": black});
        l3 = new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "radius": (0.9775 * radius), "edges": 99, "lineWidth": 15/2, "lineColor": white, "fillColor": black});
        l5 = new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "radius": (0.7 * radius), "edges": 99, "lineColor": black, "fillColor": white});
        Line = new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "radius": (0.7 * radius), "edges": 99, "lineWidth": 15/2, "lineColor": null, "fillColor": null});
        //Line.setFillColor(null);
        //Line.setLineColor(null); //this is just to see if the line mouse works

        //circle_1 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "lineColor": red, "fillColor": red});
        //circle0 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "lineColor": red, "fillColor": red});
      Begin JS Routine:
        var t1;
        var t2;
        var t_now;
        var frameCount;
        var frameCountPrevious;
        var t_previous;
        var qs;
        //defineVars = true;
        console.log('defineVars at begin routine:', defineVars)
        //initializationClock.reset();
        var circles = [];
        var bounces = [];
        //var circlePositions = [];
        var circleDirections = [];
        var angles = [];
        rotationSpeed = 0.002
        //console.log('M', nm);
        //if (nm === 1) {rotationSpeed = 0.0015}
        //if (nm === 2) {rotationSpeed = 0.0025}//{rotationSpeed = 0.0022}
        Mstarted = false
        Mended = false
        //rotationSpeed = (0.0035 * nm);
        var circleCount;

        circleCount = c;

        iterationS = 4;
        qs = q;
        //if (c===15) {qs = 2};

        if (qs === 2) {
            startDelay = ((radius / circleCount) / 2)*0.7;
            console.log('startDelay:', startDelay);
        } else if (qs === 3 && c === 15) {
            startDelay = ((radius / circleCount) / 2)*0.7;
            console.log('startDelay:', startDelay);
        } else if (qs === 3) {
            startDelay = ((radius / circleCount) / 2)*0.7;
            console.log('startDelay:', startDelay);
        } else if (qs === 4) {
            startDelay = ((radius / circleCount) / 2)*0.3;
            console.log('startDelay:', startDelay);
        } else {
            startDelay = ((radius / circleCount) / 2);
        }


        circles = [];
        bounces = [];
        //var circlePositions = (function () {
            //var _pj_a = [], _pj_b = util.range(circleCount);
            //for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                //var i = _pj_b[_pj_c];
                //console.log('i:', i);  // Add this line
                //console.log('startDelay:', startDelay);  // Add this line
                //_pj_a.push(((- (i + 1)) * startDelay));
            //}
            //return _pj_a;
        //})();
        //circlePositions = [-0.03333333333333333, -0.06666666666666667,-0.1,-0.13333333333333333,-0.16666666666666666,-0.2]

        l5.autoDraw = true;
        bar.autoDraw = true;
        dif_trajectory = [];
        for (var iDot, _pj_c = 0, _pj_a = util.range(circleCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            iDot = _pj_a[_pj_c];
            circles.push(new visual.Polygon({"win": psychoJS.window, "units": psychoJS.window.units, "radius": dotRadius, "edges": v, "lineWidth": (1.0 / 2), "lineColor": black, "fillColor": black}));
            circles[iDot].opacity = 1;
            //circles[iDot].autoDraw = true;
        }
        // this is just to test saving the position of the red circle
        var angles = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((((((i / circleCount) * 0.5) * Math.PI) / q) + s) - Math.PI));
            }
            return _pj_a;
        })();



        //let circleDirections = new Array(circleCount).fill(1);



        //averageCircle = visual.Polygon(win, radius = dotRadius, edges = 99, fillColor='black', lineColor='black')

        if (((Practice === false))) {
            Progress += 1;}
        xpro = barfor.pos[0];
        ypro = barfor.pos[1];
        barfor.pos = [xpro+(Progress*0.0016 / 48), ypro];
        barfor.size = [(Progress*0.16 / 48), 0.08];
        //}
        Condition = 1;
        console.log('l:', l, 's:', s, 'q:', q, 'cM:', c, 'circleCount:', circleCount, 'length of circles:', circles.length)
        continueCondition = true;
      Begin Routine:
        #rotationSpeed = (0.1/n) *0.055
        #rotationSpeed = 0.017174/n
        #rotationSpeed = 0.005822784810126582*n
        rotationSpeed = 0.0035*nm

        circleCount = c  # You can set this to any number
        iterations = 4 #circleCount#/n

        startDelay = (radius / circleCount)/2  # Calculate start delay based on radius and circle count
        circles = []
        bounces = []
        #win = visual.Window([800, 800])

        #l4.autoDraw = True
        l5.autoDraw = True

        #text.autoDraw = True
        #times.autoDraw = True

        dif_trajectory = []


        for iDot in range(circleCount):
            circles.append(visual.Polygon(win, radius = dotRadius, edges = 99, lineWidth=1.0/2, lineColor=black, fillColor=black))
            circles[iDot].autoDraw = True

        circlePositions = [-(i+1) * startDelay for i in range(circleCount)]
        #circlePositions = [-i * startDelay for i in range(circleCount)]
        circleDirections = [1] * circleCount

        angle = [((i / circleCount) * 0.5*pi/q +s -pi) for i in range(circleCount)]

        #averageCircle = visual.Polygon(win, radius = dotRadius, edges = 99, fillColor='black', lineColor='black')


        if not Practice == True:
            Progress += 1
            bar.progress = Progress / 48

        Condition = 1
      Each Frame:
        # Reduce rotationSpeed and increase number of iterations

        for _ in range(int(iterations)):
            for i in range(circleCount):
                x = radius * cos(angle[i]) + circlePositions[i] * cos(angle[i])
                y = radius * sin(angle[i]) + circlePositions[i] * sin(angle[i])
                circles[i].pos = [x, y]
                circlePositions[i] += circleDirections[i] * rotationSpeed
                if math.sqrt((x)**2 + (y)**2) > (radius-0.005):
                    circleDirections[i] *= -1  # Flip direction
                    bounces.append(1)
                    if circleDirections[i] == -1:
                        circlePositions[i] =  (-dotRadius) / math.sqrt(2)  # Position just inside the circle line
                    else:
                        circlePositions[i] =  -0.8+(dotRadius) / math.sqrt(2)  # Position just inside the circle line
                if len(bounces) <= 0.5*circleCount:
                    for iDot in range(circleCount):
                        circles[iDot].opacity = 0
                if len(bounces) > 0.5*circleCount:
                    for iDot in range(circleCount):
                        if circles[iDot].opacity == 0:
                            circles[iDot].opacity= 1
                if len(bounces) >= 1.5*circleCount:
                    for iDot in range(circleCount):
                        circles[iDot].opacity = 0
                        l5.lineWidth = 150
                        circles[iDot].autoDraw = False

                        continueRoutine = False

                if 'escape' in event.getKeys():
                    continueRoutine = False
      Each JS Frame:
        var _pj;
        var x;
        var y;
        var t1;
        var t2;
        var z;
        //circleCount = c;
        var MfinaldotPos;

        if (Mstarted === false) {
                    //console.log('t1 =', RotationClock.getTime(), 'cM', cM, 'length of circles:', circles.length);
                    t1 = RotationClock.getTime();
                    t_previous = t1;
                    frameCountPrevious=0;
                    Mstarted = true};

        t_now = RotationClock.getTime();
        //console.log('t_now =',t_now);
        //console.log('t1 =',t1);
        frameCount = Math.round((t_now-t1)*60);
        frameDifferenceFrac = (t_now-t_previous)*60;
        frameDelta = frameCount-frameCountPrevious;
        z = Math.sqrt(t_now)
        if (defineVars) {
        var angless = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((((((i / circleCount) * 0.5) * (Math.PI+(1.5*l*z))) / q) + s) - Math.PI));
            }
            return _pj_a;
        })();
        var circlePositionss = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((- (i + 1)) * startDelay));
            }
            return _pj_a;
        })();
        circleDirections = new Array(c).fill(1);
        bouncess = 0;
        bounces = bouncess
        angles = angless
        circlePositions = circlePositionss


        defineVars = false;
        }
        //console.log('Inside define Vars: t1 =', RotationClock.getTime(), 'cM', cM, 'length of circles:', circles.length);
        //circles = circless
        //console.log(circlePositions, angles)
        //_pj = {};
        //_pj_snippets(_pj);
        //console.log('Outside define Vars: t1 =', RotationClock.getTime(), 'cM', cM, 'length of circles:', circles.length);
        for (var _, _pj_c = 0, _pj_a = util.range(Number.parseInt(iterationS)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            _ = _pj_a[_pj_c];
            for (var i, _pj_f = 0, _pj_d = util.range(circleCount), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                i = _pj_d[_pj_f];
                //console.log(i, ':opacity', 'cM', cM, 'length of circles:', circles.length);
                x = ((radius * Math.cos(angles[i]+l*z)) + (circlePositions[i] * Math.cos(angles[i]+l*z)));
                //console.log(circles[0].pos, circlePositions[0], angles[0], circleDirection[0])
                //x = ((radius * Math.cos(angles[0])) + (circlePositions[0] * Math.cos(angles[0])));
                y = ((radius * Math.sin(angles[i]+l*z)) + (circlePositions[i] * Math.sin(angles[i]+l*z)));
                circles[i].pos = [x, y];
                circlePositions[i] += (circleDirections[i] * rotationSpeed);

                if ((Math.sqrt((Math.pow(x, 2) + Math.pow(y, 2))) > (radius - 0.005))) {
                    circleDirections[i] *= (- 1);
                    bounces += 1;
                    if ((circleDirections[i] === (- 1))) {
                        circlePositions[i] = ((- dotRadius) / Math.sqrt(2));
                    } else {
                        circlePositions[i] = ((- 0.8) + (dotRadius / Math.sqrt(2)));
                    }
                }
                for (var iDot = 0; iDot < c; iDot++) {
                    circles[iDot].opacity = 0;
                    }
                //}
                if ((bounces > (0.5 * circleCount))) {
                    if (Mstarted === false) {
                    //console.log('t1 =',MaskClock.getTime());
                    t1 = MaskClock.getTime();
                    Mstarted = true};
                    for (var iDot, _pj_i = 0, _pj_g = util.range(c), _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        iDot = _pj_g[_pj_i];
                        if ((circles[iDot].opacity === 0)) {
                            circles[iDot].opacity = 1;
                        }
                    }
                }
                if ((bounces >= (1.5 * circleCount))) {
                    if (Mended === false) {
                    t2 = MaskClock.getTime();
                    //console.log('M time taken:', t2, t1)
                    Mended = true};
                    for (var iDot, _pj_i = 0, _pj_g = util.range(circleCount), _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        iDot = _pj_g[_pj_i];
                        circles[iDot].opacity = 0;
                        circles[iDot].autoDraw = false;
                        MfinaldotPos = circles[0].pos;
                        psychoJS.experiment.addData('Mask first dot x position', MfinaldotPos[0]);
                        psychoJS.experiment.addData('Mask first dot y position:', MfinaldotPos[1])
                        continueRoutine = false;
                    }
                }
            circles[i].draw();
            }
        }
        t_previous = t_now;
        frameCountPrevious = frameCount
      End JS Routine:
        console.log('managed to end each frame tab of Mask')
        console.log('defineVars at end routine before resetting:', defineVars)
        defineVars = true;
        console.log('defineVars at end routine after resetting:', defineVars)
        bar.autoDraw = false;
        continueCondition = false;
      End Routine:
        #core.wait(0.125)
        #for i in range(circleCount):
            #circles[i].autoDraw = False
    MouseComponent mouse_5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Line
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        s2 = (s + (Condition * Math.PI));
        if (Condition === 1 && l === 1) {s2 -= Math.PI}
        mouse_angle = ((s2 + ((2.5 * Math.PI) / 15)) + Math.PI);

        start = [((0.7 * radius) * Math.cos((s2 + ((2.5 * Math.PI) / 15)))), ((0.7 * radius) * Math.sin((s2 + ((2.5 * Math.PI) / 15))))];
        end = [((0.7 * radius) * Math.cos(((s2 + ((2.5 * Math.PI) / 15)) + Math.PI))), ((0.7 * radius) * Math.sin(((s2 + ((2.5 * Math.PI) / 15)) + Math.PI)))];
        Line.pos = start;
        l5.autoDraw = true;
        Line.autoDraw = true;
        bar.autoDraw = true;
        circle0 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle0.opacity = 1;
        //circle0.autoDraw = true;

        console.log('start=', start)
      Begin Routine:
        s2 = s + Condition * pi
        mouse_angle = s2+2.5*pi/15 + pi
        #circle0 = visual.Circle(win, radius=0.015/2, fillColor='red', lineColor='red')
        circle0.opacity = 1  # make the circle invisible

        start = [0.7*radius * cos(s2+2.5*pi/15), 0.7*radius * sin(s2+2.5*pi/15)]
        end = (0.7*radius * cos(s2+2.5*pi/15+pi), 0.7*radius * sin(s2+2.5*pi/15+pi))
        Line.pos = start

        Line.autoDraw = True
        circle0.autoDraw = True
      Each Frame:
        change = -sum(mouse.getRel())

        mouse_angle += 3*change
        xposition = 0.28 * cos(mouse_angle)
        yposition = 0.28 * sin(mouse_angle)

        circle0.pos = (xposition, yposition)
        circle0.pos += start  # update the position of the circle
      Each JS Frame:
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2((position[1]-start[1]), (position[0]-start[0]))
        xposition = ((0.7*radius) * Math.cos(mouse_angle)) + start[0];
        yposition = ((0.7*radius) * Math.sin(mouse_angle)) + start[1];
        circle0.pos = [xposition, yposition];
        circle0.draw()
      End JS Routine:
        bar.autoDraw = false;
        l5.autoDraw = false;
        Line.autoDraw = false;
        circle0.autoDraw = false;
        if (Practice === true) {
        psychoJS.experiment.addData('Practice c0 x position:', circle0.pos[0]);
        psychoJS.experiment.addData('Practice c0 y position:', circle0.pos[1])
        }
        else if (Condition === 1) {
        psychoJS.experiment.addData('Mask c0 x position:', circle0.pos[0]);
        psychoJS.experiment.addData('Mask c0 y position:', circle0.pos[1])
        }
        else if (Condition === 2) {
        psychoJS.experiment.addData('Rotation c0 x position:', circle0.pos[0]);
        psychoJS.experiment.addData('Rotation c0 y position:', circle0.pos[1])
        }
      End Routine:
        #l5.lineColor = 'grey'
        Line.autoDraw = False
    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.02
      pos = (0, 0.8*radius)
      startVal [time (s)] = 0.0
      text = Where did the first dot cross the black line?
      units = height
      wrapWidth = 0.5
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  Routine Halo_1
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        var s2;
        var mouse_angle

        s2 = (s + (Condition * Math.PI));
        mouse_angle = ((s2 + ((2.5 * Math.PI) / 15)) + Math.PI);
        //mouse = new psychoJS.eventManager.Mouse({"win": psychoJS.window});
        l5.autoDraw = true;
        bar.autoDraw = true;
        circle0.autoDraw = true;

        circle1 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle1.opacity = 1;
        //circle1.autoDraw = true;
      Begin Routine:
        s2 = s + Condition * pi
        mouse_angle = s2+2.5*pi/15 + pi

        mouse = event.Mouse(win=win)
        core.wait(0.25)
        #for i in range(circleCount):
        #circles[i].opacity= 1

        # create a circle (initially not displayed)
        circle1 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle1.opacity = 1  # make the circle invisible
        circle1.autoDraw = True
      Each Frame:
        change = -sum(mouse.getRel())
        mouse_angle += 3*change

        xposition = 0.28 * cos(mouse_angle)
        yposition = 0.28 * sin(mouse_angle)

        circle1.pos = (xposition, yposition) # update the position of the circle
      Each JS Frame:
        var xposition;
        var yposition;
        var change;
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((0.7*radius) * Math.cos(mouse_angle));
        yposition = ((0.7*radius) * Math.sin(mouse_angle));
        circle1.pos = [xposition, yposition];
        circle1.draw()
      End JS Routine:
        bar.autoDraw = false;
        l5.autoDraw = false;
        circle0.autoDraw = false;
        circle1.autoDraw = false;
        if (Practice === true) {
        psychoJS.experiment.addData('Practice c1 x position:', circle1.pos[0]);
        psychoJS.experiment.addData('Practice c1 y position:', circle1.pos[1])
        }

        else if (Condition === 1) {
        psychoJS.experiment.addData('Mask c1 x position:', circle1.pos[0]);
        psychoJS.experiment.addData('Mask c1 y position:', circle1.pos[1])
        }
        else if (Condition === 2) {
        psychoJS.experiment.addData('Rotation c1 x position:', circle1.pos[0]);
        psychoJS.experiment.addData('Rotation c1 y position:', circle1.pos[1])
        }
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.02
      pos = (0, 0.8*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Where did the first dot leave the circle
  Routine Halo_2
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        var s2;
        var mouse_angle;
        s2 = (s + (Condition * Math.PI));
        mouse_angle = ((s2 + ((2.5 * Math.PI) / 15)) + (0.9 * Math.PI));
        circle2 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle2.opacity = 1;
        l3.autoDraw = true;
        l5.autoDraw = true;
        bar.autoDraw = true;
        circle0.autoDraw = true;
        circle1.autoDraw = true;
        //circle2.autoDraw = true;
      Begin Routine:
        s2 = s + Condition * pi
        #l3.autoDraw = True
        mouse_angle = s2+2.5*pi/15 + 0.9*pi
        # create a circle (initially not displayed)
        circle2 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle2.opacity = 1  # make the circle invisible
        circle2.autoDraw = True
      Each Frame:
        l3.draw()
        l5.draw()

        change = -sum(mouse.getRel())
        mouse_angle += 3*change
        xposition = 0.9775*radius * cos(mouse_angle)
        yposition = 0.9775*radius * sin(mouse_angle)

        circle2.pos = (xposition, yposition)
      Each JS Frame:
        var change;
        var xposition;
        var yposition;
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((0.9775 * radius) * Math.cos(mouse_angle));
        yposition = ((0.9775 * radius) * Math.sin(mouse_angle));
        circle2.pos = [xposition, yposition];
        circle2.draw()
      End JS Routine:
        bar.autoDraw = false;
        l5.autoDraw = false;
        l3.autoDraw = false;
        circle0.autoDraw = false;
        circle1.autoDraw = false;
        circle2.autoDraw = false;
        if (Practice === true) {
        psychoJS.experiment.addData('Practice c2 x position:', circle2.pos[0]);
        psychoJS.experiment.addData('Practice c2 y position:', circle2.pos[1])
        }

        else if (Condition === 1) {
        psychoJS.experiment.addData('Mask c2 x position:', circle2.pos[0]);
        psychoJS.experiment.addData('Mask c2 y position:', circle2.pos[1])
        }
        else if (Condition === 2) {
        psychoJS.experiment.addData('Rotation c2 x position:', circle2.pos[0]);
        psychoJS.experiment.addData('Rotation c2 y position:', circle2.pos[1])
        }
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.02
      pos = (0, 0.8*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Where would the first dot have
        crossed the line of this ring?
  Routine Halo_3
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        var s2;
        var mouse_angle
        s2 = (s + (Condition * Math.PI));
        mouse_angle = ((s2 + ((2.5 * Math.PI) / 15)) + Math.PI);
        circle3 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle3.opacity = 1;
        l1.autoDraw = true;
        l3.autoDraw = true;
        l5.autoDraw = true;
        bar.autoDraw = true;
        circle0.autoDraw = true;
        circle1.autoDraw = true;
        circle2.autoDraw = true;
        //circle3.autoDraw = true;
      Begin Routine:
        s2 = s + Condition * pi
        #l1.autoDraw = True
        mouse_angle = s2+2.5*pi/15 + pi
        # create a circle (initially not displayed)
        circle3 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle3.opacity = 1  # make the circle invisible
        circle3.autoDraw = True
      Each Frame:
        l1.draw()
        l3.draw()
        l5.draw()

        change = -sum(mouse.getRel())
        mouse_angle += 3*change
        xposition = 1.25*radius * cos(mouse_angle)
        yposition = 1.25*radius * sin(mouse_angle)

        circle3.pos = (xposition, yposition)

        #win.flip()
      Each JS Frame:
        var change;
        var xposition;
        var yposition;
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = ((1.25 * radius) * Math.cos(mouse_angle));
        yposition = ((1.25 * radius) * Math.sin(mouse_angle));
        circle3.pos = [xposition, yposition];
        circle3.draw()
      End JS Routine:
        console.log('managed to start End Routine of Halo_3');
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        l1.autoDraw = false;
        l3.autoDraw = false;
        l5.autoDraw = false;
        bar.autoDraw = false;
        Line.autoDraw = false;
        circle0.autoDraw = false;
        circle1.autoDraw = false;
        circle2.autoDraw = false;
        circle3.autoDraw = false;

        if (Practice === true) {
        psychoJS.experiment.addData('Practice c3 x position:', circle3.pos[0]);
        psychoJS.experiment.addData('Practice c3 y position:', circle3.pos[1])
        }
        else if (Condition === 1) {
        psychoJS.experiment.addData('Mask c3 x position:', circle3.pos[0]);
        psychoJS.experiment.addData('Mask c3 y position:', circle3.pos[1])
        }
        else if (Condition === 2) {
        psychoJS.experiment.addData('Rotation c3 x position:', circle3.pos[0]);
        psychoJS.experiment.addData('Rotation c3 y position:', circle3.pos[1])
        }

        //for (var i, _pj_c = 0, _pj_a = util.range(c), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            //i = _pj_a[_pj_c];
            //circles[i].autoDraw = false;
        //}
        for (var circle, _pj_c = 0, _pj_a = circles, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            circle = _pj_a[_pj_c];
            circle.autoDraw = false;
        }

        console.log('managed to end Halo_3');
      End Routine:
        l1.autoDraw = False
        l3.autoDraw = False
        l5.autoDraw = False

        l5.lineColor = 'white'
        Line.autoDraw = False
        circle1.autoDraw = False
        circle0.autoDraw = False
        circle2.autoDraw = False
        circle3.autoDraw = False

        for i in range(circleCount):
            circles[i].autoDraw = False
    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.02
      pos = (0, 0.8*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Where would the first dot have
        crossed the line of the second ring?
  Routine Instructions_2
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    CodeComponent code_10
      Code Type = Both
      Begin Experiment:
        import numpy as np
      Begin JS Experiment:
        radius = 0.375;
      Begin JS Routine:
        mouse_angle = 0;
        //let mouse = new visual.Mouse({win: psychoJS.window,});
        circle1 = new visual.Polygon({"win": psychoJS.window, "radius": (0.015 / 2), "edges": 99, "fillColor": red, "lineColor": red});
        circle1.opacity = 1;
        l5.autoDraw = true;
        circle1.autoDraw = false;
        Condition = 1;

        //changeStim = new visual.TextStim({"win": psychoJS.window, "color": black, "height": 0.035});
        //changeStim.autoDraw = true;
        cum = 0;
        fullRotation = 0
        prev = 0.01
      Begin Routine:
        mouse_angle = 0

        mouse = event.Mouse(win=win)
        core.wait(0.25)
        #for i in range(circleCount):
        #circles[i].opacity= 1

        # create a circle (initially not displayed)
        circle1 = visual.Polygon(win, radius=0.015/2, edges = 99, fillColor=red, lineColor=red)
        circle1.opacity = 1  # make the circle invisible
        l5.autoDraw = True
        circle1.autoDraw = True

        Condition = 1
        fullRotation = []
        print('began instructions_2')
      Each Frame:
        print('began each frame')
        positioon = mouse_12.getRel()
        print('found relative mouse')
        mouse_angle = np.cos(positioon[0]) + np.sin(positioon[1])
        print('calculated mouse_angle')
        xposition = 0.28 * np.cos(mouse_angle)
        yposition = 0.28 * np.sin(mouse_angle)

        circle1.pos = (xposition, yposition) # update the position of the circle

        if change >= 1:
            fullRotation += 1
      Each JS Frame:
        //change = (- util.sum(mouse.getRel()));
        //mouse_angle += (3 * change);
        position = mouse.getPos()
        mouse_angle = Math.atan2(position[1], position[0])
        xposition = (0.7*radius * Math.cos(mouse_angle));
        yposition = (0.7*radius * Math.sin(mouse_angle));
        circle1.pos = [xposition, yposition];
        //if (Math.sign(change) === 0) {cum = 0};

        // Check if the signs of change and prev are different
        //if (change * prev < 0) {
            //cum = 0;
        //}
        //cum += change;
        //changeStim.text = cum;
        //console.log(cum);
        //if ((Math.abs(cum) >= 2)) {
            //fullRotation += 1;
            //cum = 0;
        //}
        //if ((change * prev) !== 0) {
            //prev = change;
        //}
        //if ((fullRotation >= 2)) {
            //continueRoutine = false;
        //};
      End JS Routine:
        circle1.autoDraw = false;
      End Routine:
        circle1.autoDraw = False
    TextComponent text_8
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Welcome to this experiment!

        On the next screen, a black dot will appear
        that moves through the white circle.
        Your job is to remember the trajectory of this dot.
        You will be asked to predict the path of the dot, assuming that it keeps its momentum on leaving the circle.

        Click to continue!
    MouseComponent mouse_12
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Debrief
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    CodeComponent code_12
      Code Type = Both
      Begin JS Routine:
        rotationSpeed = (0.001);
        circleCount = 6;
        iterations = 4;
        startDelay = ((radius / circleCount) / 2);
        circles = [];
        bounces = [];
        l5.autoDraw = true;
        dif_trajectory = [];

        barfor.pos = barground.pos
        barfor.size = [(0.16), 0.08];

        for (var iDot, _pj_c = 0, _pj_a = util.range(circleCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            iDot = _pj_a[_pj_c];
            circles.push(new visual.Polygon({"win": psychoJS.window, "radius": dotRadius, "edges": 99, "lineWidth": (1.0 / 2), "lineColor": black, "fillColor": black}));
            circles[iDot].autoDraw = true;
            circles[iDot].opacity = 0;
        }
        circles[0].opacity = 1;
        circlePositions = function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((- (i + 1)) * startDelay));
            }
            return _pj_a;
        }
        .call(this);
        circleDirections = ([1] * circleCount);
        angle = function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push((((((i / circleCount) * 0.5) * Math.PI) / 3) + s));
            }
            return _pj_a;
        }
        .call(this);
      Begin Routine:
        rotationSpeed = 0.0035*n

        circleCount = 6  # You can set this to any number
        iterations = 4 #circleCount#/n

        startDelay = (radius / circleCount)/2  # Calculate start delay based on radius and circle count
        circles = []
        bounces = []
        #win = visual.Window([800, 800])

        #l4.autoDraw = True
        l5.autoDraw = True
        #text.autoDraw = True
        #times.autoDraw = True

        dif_trajectory = []

        for iDot in range(circleCount):
            circles.append(visual.Polygon(win, radius = dotRadius, edges = 99, lineWidth=1.0/2, lineColor=black, fillColor=black))
            circles[iDot].autoDraw = True
            circles[iDot].opacity = 0
        circles[0].opacity = 1

        circlePositions = [-(i+1) * startDelay for i in range(circleCount)]
        #circlePositions = [-i * startDelay for i in range(circleCount)]
        circleDirections = [1] * circleCount

        angle = [((i / circleCount) * 0.5*pi/3 + s) for i in range(circleCount)]
      Each Frame:
        # Reduce rotationSpeed and increase number of iterations

        for _ in range(int(iterations)):
            for i in range(circleCount):
                x = radius * cos(angle[i]) + circlePositions[i] * cos(angle[i])
                y = radius * sin(angle[i]) + circlePositions[i] * sin(angle[i])
                circles[i].pos = [x, y]
                circlePositions[i] += circleDirections[i] * rotationSpeed
                if math.sqrt((x)**2 + (y)**2) > (radius-0.005):
                    circleDirections[i] *= -1  # Flip direction
                    bounces.append(1)
                    if circleDirections[i] == -1:
                        circlePositions[i] =  (-dotRadius) / math.sqrt(2)  # Position just inside the circle line
                    else:
                        circlePositions[i] =  -0.8+(dotRadius) / math.sqrt(2)  # Position just inside the circle line
                if len(bounces) <= 0.5*circleCount:
                    for iDot in range(circleCount):
                        circles[i].opacity = 0
                        circles[0].opacity = 1

                if 'escape' in event.getKeys():
                    break

        k = len(bounces)/circleCount
        if (k).is_integer() and 0 <= k <=6:
            circles[int(k)].opacity = 1
        if len(bounces) >= circleCount*5:
            bounces = []
      Each JS Frame:
        var _pj;
        var x;
        var y;
        if (defineVars) {
        var angless = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((((((i / circleCount) * 0.5) * Math.PI) / q) + s) - Math.PI));
            }
            return _pj_a;
        })();
        var circlePositionss = (function () {
            var _pj_a = [], _pj_b = util.range(circleCount);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                console.log('i:', i);  // Add this line
                console.log('startDelay:', startDelay);  // Add this line
                _pj_a.push(((- (i + 1)) * startDelay));
            }
            return _pj_a;
        })();
        circleDirections = new Array(circleCount).fill(1);
        bouncess = 0;
        bounces = bouncess
        angles = angless
        circlePositions = circlePositionss
        defineVars = false;
        }
        for (var _, _pj_c = 0, _pj_a = util.range(Number.parseInt(iterations)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            _ = _pj_a[_pj_c];
            for (var i, _pj_f = 0, _pj_d = util.range(circleCount), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                i = _pj_d[_pj_f];
                x = ((radius * Math.cos(angles[i])) + (circlePositions[i] * Math.cos(angles[i])));
                y = ((radius * Math.sin(angles[i])) + (circlePositions[i] * Math.sin(angles[i])));
                circles[i].pos = [x, y];
                circlePositions[i] += (circleDirections[i] * rotationSpeed);
                if ((Math.sqrt((Math.pow(x, 2) + Math.pow(y, 2))) > (radius - 0.005))) {
                    circleDirections[i] *= (- 1);
                    bounces += 1;
                    if ((circleDirections[i] === (- 1))) {
                        circlePositions[i] = ((- dotRadius) / Math.sqrt(2));
                    } else {
                        circlePositions[i] = ((- 0.8) + (dotRadius / Math.sqrt(2)));
                    }
                }
                if ((bounces <= (0.5 * circleCount))) {
                    for (var iDot, _pj_i = 0, _pj_g = util.range(circleCount), _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        iDot = _pj_g[_pj_i];
                        circles[i].opacity = 0;
                        circles[0].opacity = 1;
                    }
                }
            circles[i].draw();
            }
        }
        var k = (bounces / circleCount);
        if (Number.isInteger(k) && 0 < k && k < 8) {
            circles[parseInt(k)-1].opacity = 1;
        }
        if ((bounces >= (circleCount * 5.5))) {
            bounces = 0;
        }
        circles[0].draw()
        console.log(k)
    MouseComponent mouse_14
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.02
      pos = (0, 0.9*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        In this experiment we wanted to investigate why it looks like the dots are moving in curves even though they are all moving in straight lines.
        Feel free to contract jmt28@st-andrews.ac.uk if you have questions or are interested in the results of this study.
    TextComponent text_11
      letterHeight = 0.02
      pos = (0, -0.8*radius)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.5
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      text:
        Thank you for participating!
        Click to exit the experiment and wait untiil
        data is downloaded before pressing 'ok'.
  Routine PIS1
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    TextComponent text_10
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Participant Information Sheet

        What is the study about?
        We invite you to participate in a research project about the visual processing of grouped objects. We are interested in the way different groupings affect the way we track composite movement.

        Do I have to take part?
        This information sheet has been written to help you decide if you would like to take part. It is up to you and you alone whether you wish to take part. If you do decide to take part, you will be free to withdraw at any time by pressing the escape key with no negative consequences.

        What would I be required to do?
        The task involves viewing short clips of moving objects and after each clip indicating where you would expect an object to collide with a barrier. There are example trials and visual instructions, and the setup detailed there remains the same throughout the task.

        Informed consent
        It is important that you can give your informed consent before taking part in this study. Feel free to ask questions about the research by contacting the researchers before you provide your consent.

        What information about me or recordings of me (‘my data’) will you be collecting?
        Only your age and the position of the clicks you place to indicate where you expect stimuli to collide with a barrier will be recorded. This data will be anonymous which means that that no-one, including the researchers, could use any reasonably available means to identify you from the data.

        Click to continue to the next page.

        1/3
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine PIS2
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    TextComponent text_16
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Participant Information Sheet

        How will my data be stored and who will have access to it?
        The data will be stored in OneDrive file to be accessible only by the participating researchers.

        How will my data be used and in what form will it be shared further?
        The data will be analysed as part of the research study. It may then be published in my dissertation which will be finalised by April 2023.


        When will my data be destroyed?
        The data will be retained until I have fully completed my dissertation (including grading), and then destroyed.

        Will my participation be confidential?
        Yes, we use an anonymous recruitment policy in Prolific so your participation is not known to anyone.

        Use of your personal data for research and your data protection rights
        The University of St Andrews (the ‘Data Controller’) is bound by the UK 2018 Data Protection Act and the General Data Protection Regulation (GDPR), which require a lawful basis for all processing of personal data (in this case it is the ‘performance of a task carried out in the public interest’ – namely, for research purposes) and an additional lawful basis for processing personal data containing special characteristics (in this case it is ‘public interest research’). You have a range of rights under data protection legislation. For more information on data protection legislation and your rights visit https://www.st-andrews.ac.uk/terms/data-protection/rights/. For any queries, email dataprot@st-andrews.ac.uk.

        Click to continue.

        2/3
    MouseComponent mouse_13
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Consent
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    TextComponent text_18
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Consent Form

        The University of St Andrews attaches high priority to the ethical conduct of research.  We therefore ask you to consider the following points before signing this form. Pressing the 'y'-key confirms that you are willing to participate in this study, however, it does not commit you to anything you do not wish to do and you are free to withdraw your participation at any time by pressing the 'escape'-key twice.

        Only press the 'y'-key if you understand and agree with the following statements:

        o I understand the contents of the Participant Information Sheet

        o I have been given the opportunity to ask questions about the study and have had them answered satisfactorily.

        o I understand that my participation is entirely voluntary and that I can withdraw from the study at any time without giving an explanation and with no disbenefit.

        o I understand who will have access to my data, how it will be stored, in what form it will be shared, and what will happen to it at the end of the study.

        o I understand that once the experiment is over my data cannot be withdrawn because it has been anonymised.

        o I agree to take part in the above study

        Press the 'y'-key if you understand and agree to start the experiment or press the 'n'-key to exit.
    KeyboardComponent consent_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if consent_resp.keys == 'y':
            TrialReps = 1
            NoConsentReps = 0

        elif consent_resp.keys == 'n':
            TrialReps = 0
            NoConsentReps = 1
  Routine PIS3
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    TextComponent text_17
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Participant Information Sheet

        Withdrawing your data
        Once data is collected it cannot be deleted because we will not know which data is yours. You can still withdraw from the experiment at any time by pressing the escape key or closing the browser.

        Ethics review
        This experiment was granted ethical approval by the University of St Andrews Teaching and Research Ethics Committee.

        What should I do if I have concerns about this study?
        In the first instance, you are encouraged to raise your concerns with the researcher. However, if you do not feel comfortable doing so, then you should contact Dr Justin Ales or the School Ethics Contact (contact details below). A full outline of the procedures governed by the University Teaching and Research Ethics Committee is available at https://www.st-andrews.ac.uk/research/integrity-ethics/humans/ethical-guidance/complaints/.

        Contact details
        Feel free to ask addition questions using the following contact information.

        Researcher: Jan Thiel – jmt28@st-andrews.ac.uk
        Supervisor: Dr Justin Ales – jma23@st-andrews.ac.uk
        School ethics contact: psyethics@st-andrews.ac.uk

        Click to continue to the consent form.

        3/3
    MouseComponent mouse_19
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine no_consent_screen
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    CodeComponent code_18
      Code Type = Both
      Begin JS Routine:
        //psychoJS.setRedirectUrls('https://www.psychopy.org/online/prolificIntegration.html', 'https://discourse.psychopy.org/t/completedurl-incompleteurl/5597/21');
        //this._completionUrl = 'https://discourse.psychopy.org/t/completedurl-incompleteurl/5597/21';
      Begin Routine:
        PsychoJS.setRedirectUrls('https://www.psychopy.org/online/prolificIntegration.html', 'https://discourse.psychopy.org/t/completedurl-incompleteurl/5597/21')
    TextComponent text_20
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Thank you for your response.
        Press the 'escape' key on your keyboard or close the browser to exit.
Flow
  Routine PIS1
  Routine PIS2
  Routine PIS3
  Routine Consent
  LoopInitiator show_trials loopType="TrialHandler"
    loopType = random
    nReps = TrialReps
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    Routine Instructions_2
    Routine Instruction_Animation
    Routine Line0
    Routine Halo_01
    Routine Halo_02
    Routine Halo_03
    Routine Instructions2
    LoopInitiator Pract loopType="TrialHandler"
      Selected rows = 0, 1, 2
      conditionsFile = Book5.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'v': 99, 'l': 0, 's': 4, 'q': 3, 'c': 6},
        {'v': 3, 'l': 0, 's': 2, 'q': 3, 'c': 6},
        {'v': 99, 'l': 0, 's': 5, 'q': 3, 'c': 15},
        {'v': 99, 'l': 0, 's': 1, 'q': 4, 'c': 6},
        {'v': 99, 'l': 0, 's': 1, 'q': 2, 'c': 6},
        {'v': 99, 'l': 1, 's': 6, 'q': 3, 'c': 6},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None}]
      Routine Rotation
      Routine Line
      Routine Halo_1
      Routine Halo_2
      Routine Halo_3
    LoopTerminator Pract
    Routine Start
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Book5.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [{'v': 99, 'l': 0, 's': 4, 'q': 3, 'c': 6},
        {'v': 3, 'l': 0, 's': 2, 'q': 3, 'c': 6},
        {'v': 99, 'l': 0, 's': 5, 'q': 3, 'c': 15},
        {'v': 99, 'l': 0, 's': 1, 'q': 4, 'c': 6},
        {'v': 99, 'l': 0, 's': 1, 'q': 2, 'c': 6},
        {'v': 99, 'l': 1, 's': 6, 'q': 3, 'c': 6},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None},
        {'v': None, 'l': None, 's': None, 'q': None, 'c': None}]
      Routine Rotation
      Routine Line
      Routine Halo_1
      Routine Halo_2
      Routine Halo_3
      Routine Mask
      Routine Line
      Routine Halo_1
      Routine Halo_2
      Routine Halo_3
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = OneDot.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'v': 99, 'l': 0, 's': 4, 'q': 3, 'c': 1},
        {'v': 99, 'l': 0, 's': 2, 'q': 3, 'c': 1}]
      Routine Rotation
      Routine Line
      Routine Halo_1
      Routine Halo_2
      Routine Halo_3
      Routine Mask
      Routine Line
      Routine Halo_1
      Routine Halo_2
      Routine Halo_3
    LoopTerminator trials_2
    Routine Debrief
  LoopTerminator show_trials
  LoopInitiator NoConsent loopType="TrialHandler"
    loopType = random
    nReps = NoConsentReps
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    Routine no_consent_screen
  LoopTerminator NoConsent
